CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_xy(?P<Position>[0-9]{2})_t(?P<Timepoint>[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:A647
    Channel number:2
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    Image name:GFP

Smooth:[module_num:6|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
    Select the input image:GFP
    Name the output image:GFPMedian
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:7|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
    Select the input image:A647
    Name the output image:A647Median
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GFPMinusMedian
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GFPMedian
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:GFPMedian
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):200,700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:A647
    Name the primary objects to be identified:Rbodies
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.01
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:GFPMedian
    Name the primary objects to be identified:Vesicles
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.04
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:15
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    Thresholding method:Otsu

MaskObjects:[module_num:12|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
    Select objects to be masked:Rbodies
    Name the masked objects:RbodiesInCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:13|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
    Select objects to be masked:RbodiesInCells
    Name the masked objects:RbodiesInVesicles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Vesicles
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RescaleIntensity:[module_num:14|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
    Select the input image:GFPMedian
    Name the output image:GFPMedianRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:15|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
    Select the input image:A647Median
    Name the output image:A647MedianRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:16|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:A647MedianRescaled
    Select the image to be colored green:GFPMedianRescaled
    Select the image to be colored blue:A647MedianRescaled
    Name the output image:MedianRescaledMerge
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MedianRescaledMerge
    Name the output image:RbodyOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0080
    Select objects to display:Rbodies
    Select outline color:#00F6F6
    Select objects to display:RbodiesInCells
    Select outline color:#FB0207
    Select objects to display:Cells

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFPMedianRescaled
    Name the output image:VesicleOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF00
    Select objects to display:Vesicles
    Select outline color:#FB0207
    Select objects to display:Cells

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MedianRescaledMerge
    Name the output image:ColocOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#F5EC00
    Select objects to display:RbodiesInVesicles
    Select outline color:#FB0207
    Select objects to display:Cells

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:RbodyOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rbodies
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:VesicleOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_vesicles
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:ColocOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_coloc
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
