CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.") (file doesnot startwith ".")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_xy(?P<XYPos>[0-9]{2})_t(?P<Timepoint>[0-9]{3})_z(?P<ZPos>[0-9]{3})_c(?P<Channel>[0-9]{3})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "MaxIP")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_xy(?P<XYPos>[0-9]{2})_t(?P<Timepoint>[0-9]{3})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "MaxIP")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'GFP': 'Timepoint', 'MaxIP': 'Timepoint', 'A647': 'Timepoint'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "001") (file doesnot contain "MaxIP") (metadata does ZPos "003")
    Name to assign these images:A647
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does Channel "002") (file doesnot contain "MaxIP") (metadata does ZPos "003")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "MaxIP")
    Name to assign these images:MaxIP
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:MaxIP
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:A647MaxIP
    Channel number:2
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    Image name:GFPMaxIP

Smooth:[module_num:6|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
    Select the input image:GFP
    Name the output image:GFPGaussian
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:GFPGaussian
    Name the output image:GFPEnhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Smooth:[module_num:8|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
    Select the input image:GFPMaxIP
    Name the output image:GFPMaxIPGaussian
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:9|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enabled:False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
    Select the input image:A647
    Name the output image:A647Median
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
ImageMath:[module_num:10|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GFPMinusMedian
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GFPMedian
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Identify cells using the max proj']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
    Select the input image:GFPMaxIPGaussian
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):200,700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Identify Rbodies using a single slice']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
    Select the input image:A647
    Name the primary objects to be identified:Rbodies
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.00
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:13|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notes:['Identify vesicles using a single slice']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
    Select the input image:GFPEnhanced
    Name the primary objects to be identified:Vesicles
    Typical diameter of objects, in pixel units (Min,Max):4,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:10
    Lower and upper bounds on threshold:0.0001,1.0
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    Log transform before thresholding?:Yes
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
MaskObjects:[module_num:14|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
    Select objects to be masked:Rbodies
    Name the masked objects:RbodiesInCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:15|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
    Select objects to be masked:RbodiesInCells
    Name the masked objects:RbodiesInVesicles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Vesicles
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.75
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RescaleIntensity:[module_num:16|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
    Select the input image:GFPGaussian
    Name the output image:GFPGaussianRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:17|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enabled:False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
    Select the input image:GFPMaxIPGaussian
    Name the output image:GFPMaxIPGaussianRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:18|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
    Select the input image:A647
    Name the output image:A647Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:19|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
    Select a color scheme:RGB
    Rescale intensity:No
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    Select the image to be colored green:GFPGaussianRescaled
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    Name the output image:RescaledGFPColorized
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:20|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:A647Rescaled
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    Select the image to be colored blue:A647Rescaled
    Name the output image:RescaledA647Colorized
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:21|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:A647Rescaled
    Select the image to be colored green:GFPGaussianRescaled
    Select the image to be colored blue:A647Rescaled
    Name the output image:RescaledMerge
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledA647Colorized
    Name the output image:RbodyOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0080
    Select objects to display:Rbodies
    Select outline color:#00F6F6
    Select objects to display:RbodiesInCells
    Select outline color:#FB0207
    Select objects to display:Cells

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledGFPColorized
    Name the output image:VesicleOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:Vesicles
    Select outline color:#FB0207
    Select objects to display:Cells

OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledMerge
    Name the output image:ColocOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#F5EC00
    Select objects to display:RbodiesInVesicles
    Select outline color:#FB0207
    Select objects to display:Cells

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:RbodyOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:MaxIP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rbodies
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:VesicleOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:MaxIP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_vesicles
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:ColocOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:MaxIP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_coloc
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
